PsychoPy2experiment version="1.82.00"
Settings
  Data filename = u'data' + os.path.sep + '%s_%s' %(expInfo['participant'], expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1440, 900]
  Full-screen window = True
  Experiment info = {u'session': u'001', u'participant': u''}
  Save csv file = True
  expName = PM
  Units = use prefs
  Screen = 1
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Routines
  Routine trial2
    GratingComponent grating_2
      tex = sin
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      sf = None
      size = [0.5, 0.5]
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    TextComponent text_4
      color = red
      text = +
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine fix
    TextComponent text
      color = red
      text = +
      stopVal [duration (s)] = 36
      startVal [time (s)] = 0.0
      letterHeight = .3
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  Routine rest
    TextComponent text_5
      color = red
      text = +
      stopVal [duration (s)] = 36
      startVal [time (s)] = 0.0
      letterHeight = .3
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  Routine trial
    TextComponent text_2
      color = green
      text = +
      stopVal [duration (s)] = 36
      startVal [time (s)] = 0.0
      letterHeight = .3
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  Routine WaitForTrigger
    KeyboardComponent key_resp_2
      durationEstim = 5
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_3
      text = +
      durationEstim = 5
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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  Routine Instructions
    TextComponent instructions
      durationEstim = 10
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Stay as still as possible

        Keep your eyes on the '+'

        Keep your hands relaxed
    KeyboardComponent key_resp_3
      durationEstim = 10
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.0
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Flow
  Routine Instructions
  Routine WaitForTrigger
  Routine fix
  LoopInitiator trials_2 loopType="TrialHandler"
    loopType = sequential
    nReps = 4
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    Routine trial
    Routine rest
  LoopTerminator trials_2
